PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = icelandic
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine Instruction_3
    TextComponent text_4
      startVal [time (s)] = 0.0
      font = FreeSans
      letterHeight = 0.1
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      text:
        Be sure to read in the most natural way. Try to speak at a normal pace and with a normal intonation, as if you were talking to someone. After you have read aloud one sentence, press the spacebar to see the next sentence.

        When you are ready to start the task, press the spacebar. You will see a "+" sign for a few seconds and then the task will start.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    StaticComponent ISI_4
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
  Routine fixation
    TextComponent text_6
      text = +
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instruction
    TextComponent text_2
      startVal [time (s)] = 0.0
      font = FreeSans
      letterHeight = 0.1
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      text:
        Hi! Thanks for participating in this study on Icelandic.

        The task consists of reading aloud sentences you will see on the screen. Your voice will be recorded while you are reading.

        The task will not start yet. Press the spacebar now to go to the next page.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    StaticComponent ISI_2
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      text [set every repeat] = u'Segðu ' + $lex + ' aftur.'
      startVal [time (s)] = 0.5
      font = FreeSans
      letterHeight = 0.15
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.5
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  Routine thanks
    TextComponent text_7
      startVal [time (s)] = 0.0
      font = FreeSans
      letterHeight = 0.1
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      text:
        You have now completed the task.

        Thanks for your time!

        Press the spacebar to end.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  Routine Instruction_3
  Routine fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = words.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'cond_no': 1, 'cons': u'\u02b0k', 'pos': u'n', 'syl': u'cvcc', 'vow': u'o', 'manner': u'stop', 'lex': u'kokk', 'eng': u'cook', 'place': u'velar', 'context': u'cc', 'ph': u'k\u02b0o\u02b0k', 'asp': u'yes'},
      {'cond_no': 2, 'cons': u'kk', 'pos': u'n', 'syl': u'cvcc', 'vow': u'o', 'manner': u'stop', 'lex': u'gogg', 'eng': u'beak', 'place': u'velar', 'context': u'cc', 'ph': u'kokk', 'asp': u'no'},
      {'cond_no': 3, 'cons': u'\u02b0k', 'pos': u'agg', 'syl': u'cvcc', 'vow': u'\u0153', 'manner': u'stop', 'lex': u'd\xf6kk', 'eng': u'dark', 'place': u'velar', 'context': u'cc', 'ph': u't\u0153\u02b0k', 'asp': u'yes'},
      {'cond_no': 4, 'cons': u'kk', 'pos': u'n', 'syl': u'cvcc', 'vow': u'\u0153', 'manner': u'stop', 'lex': u'd\xf6gg', 'eng': u'dew', 'place': u'velar', 'context': u'cc', 'ph': u't\u0153kk', 'asp': u'no'},
      {'cond_no': 5, 'cons': u'\u02b0p', 'pos': u'n', 'syl': u'cvcc', 'vow': u'o', 'manner': u'stop', 'lex': u'kopp', 'eng': u'chamber pot', 'place': u'labial', 'context': u'cc', 'ph': u'k\u02b0o\u02b0p', 'asp': u'yes'},
      {'cond_no': 6, 'cons': u'pp', 'pos': u'n', 'syl': u'cvcc', 'vow': u'\u028f', 'manner': u'stop', 'lex': u'kubb', 'eng': u'block of wood', 'place': u'labial', 'context': u'cc', 'ph': u'k\u02b0\u028fpp', 'asp': u'no'},
      {'cond_no': 7, 'cons': u'\u02b0t', 'pos': u'adv', 'syl': u'cvcc', 'vow': u'i', 'manner': u'stop', 'lex': u'v\xedtt', 'eng': u'far and wide', 'place': u'coronal', 'context': u'cc', 'ph': u'vi\u02b0t', 'asp': u'yes'}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
    Routine trial
  LoopTerminator trials
  Routine thanks
